//===============================================================================
// Opens raw image stacks from Imaris software, spilts the channels, renames the channels and saves separate tiffs
// - Laura Breimann - 
//===============================================================================

extension = "lif";


dir = getDirectory("Select a directory containing one or several ."+extension+" files.");
output = getDirectory("Select a directory to save the output files");

files = getFileList(dir);

// create new subfolders to save the split images
splitDir_DAPI= output + "/DAPI/";
splitDir_C2= output + "/C2/";
splitDir_GFP= output + "/GFP/";
File.makeDirectory(splitDir_DAPI); 
File.makeDirectory(splitDir_C2); 
File.makeDirectory(splitDir_GFP); 


//setBatchMode(true);
k=0;
n=0;

run("Bio-Formats Macro Extensions");
for(f=0; f<files.length; f++) {
	if(endsWith(files[f], "."+extension)) {
		k++;
		id = dir+files[f];
		Ext.setId(id);
		Ext.getSeriesCount(seriesCount);
		print(seriesCount+" series in "+id);
		n+=seriesCount;
		for (i=0; i<seriesCount; i++) {
			run("Bio-Formats Importer", "open=["+id+"] color_mode=Default view=Hyperstack stack_order=XYCZT series_"+(i+1));
			fullName	= getTitle();
			dirName 	= substring(fullName, 0,lastIndexOf(fullName, "."+extension));
			fileName 	= substring(fullName, lastIndexOf(fullName, " - ")+3, lengthOf(fullName));

			getDimensions(x,y,c,z,t);
			
					
			//select window
			selectWindow(fullName);
	
			//split channels 
			run("Split Channels");
			
			// the follwing code exprects a 3 channel image stack with the order of DAPI, Map2 GFP and Puro-PLA
			// adapt the follwing code if the order is different in the images
			
			//select and save DAPI channel
			selectWindow("C1-" + fullName);
			resetMinAndMax();
			run("Grays");
			saveAs(".tif", splitDir_DAPI + File.separator + fullName + "_DAPI" + ".tif");
			close();			
			
						
			
			//select and save OPP channel
			selectWindow("C2-" + fullName);
			resetMinAndMax();
			run("Grays");
			saveAs(".tif", splitDir_C2 + File.separator + fullName + "_C2" + ".tif");
			close();
			
			
			
			//select and save GFP channel
			selectWindow("C3-" + fullName);
			rename(fullName + "_C3");
			selectWindow(fullName + "_C3");
			run("Duplicate...", "duplicate");
			run("Grays");
			resetMinAndMax();
			saveAs(".tif", splitDir_GFP + File.separator + fullName + "_GFP" + ".tif");
			close();
			
			
			//make max projection of GFP channel
			selectWindow(fullName + "_C3");
			run("Z Project...", "projection=[Max Intensity]");
			resetMinAndMax();
			run("Grays");
			saveAs(".tif", splitDir_GFP + File.separator + fullName + "_GFP_max" + ".tif");
			close();
						
									
									
				
			//saved all images info
			print("Saved to: " + output);
				
			
			close();
				
	
}

// Remove spaces in filenames which can have issues in downstream analysis
run("Fix Funny Filenames", "which=" + splitDir_DAPI);
run("Fix Funny Filenames", "which=" + splitDir_C2);
run("Fix Funny Filenames", "which=" + splitDir_GFP);



// close all windows
print("Done");
run("Close All");

showMessage("Done with "+k+" files and "+n+" series!");
